PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'condition': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 900]
  expName = priming
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Routines
  Routine intro
    TextComponent intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Hello there ;)

        here goes the introduction text.

        please press any key to continue
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating,

        this is the end of this part of the measurement

        press any key to end the session
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pos_images
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # for the "observe" routine:
        curr_pos_img = 'D:\Documents\MSc\sleepysleepy\programming_group\priming-session\stimuli\primes_pos\\' + pos_img.pop() # get the next value
        thisExp.addData('current_pos_file', curr_pos_img) # record it in the data
    PolygonComponent fixation_cross
      fillColor = $[1,1,1]
      lineWidth = 0.0001
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent pos_image
      image [set every repeat] = $curr_pos_img
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 11.5
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  Routine neg_images
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        # for the "observe" routine:
        curr_neg_img = 'D:\Documents\MSc\sleepysleepy\programming_group\priming-session\stimuli\primes_neg\\' + neg_img.pop() # get the next value
        thisExp.addData('current_neg_file', curr_neg_img) # record it in the data
    PolygonComponent fixation_cross_2
      fillColor = $[1,1,1]
      lineWidth = 0.0001
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent pos_image_2
      image [set every repeat] = $curr_neg_img
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 11.5
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  Routine break_3
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = WE WERE ON A BREAK!
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator pos_trials loopType="TrialHandler"
    conditionsFile = conditionA.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('image', 'D:\\Documents\\MSc\\sleepysleepy\\programming_group\\priming-stimuli\\primes_pos\\image_1.jpg')]),
      OrderedDict([('image', 'D:\\Documents\\MSc\\sleepysleepy\\programming_group\\priming-stimuli\\primes_pos\\image_2.jpg')]),
      OrderedDict([('image', 'D:\\Documents\\MSc\\sleepysleepy\\programming_group\\priming-stimuli\\primes_pos\\image_3.jpg')])]
    Routine pos_images
  LoopTerminator pos_trials
  Routine break_3
  LoopInitiator neg_trials loopType="TrialHandler"
    conditionsFile = conditionB.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('image', 'D:\\Documents\\MSc\\sleepysleepy\\programming_group\\priming-stimuli\\primes_neg\\image_1.jpg')]),
      OrderedDict([('image', 'D:\\Documents\\MSc\\sleepysleepy\\programming_group\\priming-stimuli\\primes_neg\\image_2.jpg')]),
      OrderedDict([('image', 'D:\\Documents\\MSc\\sleepysleepy\\programming_group\\priming-stimuli\\primes_neg\\image_3.jpg')])]
    Routine neg_images
  LoopTerminator neg_trials
  Routine end
